# Topas input file for field 1
# ----------------------------------------
# SOP_INSTANCE_UID 1.2.752.243.1.1.20260105182345801.4870.23686
# 
# TOTAL_NUMBER_OF_PARTICLES: 174503802987
# TOTAL_MU: 60606.06
# REQUESTED_HISTORIES: 1000000
# PARTICLE_SCALING: 174503.80
#
# Generated 2026-07-22 17:57:22 by user 'bassler'
# using dicomexport 1.4.4
# https://github.com/nbassler/dicomexport
#
##############################################
###           V A R I A B L E S            ###
##############################################

d:Rt/Plan/IsoCenterX                 = 0.00 mm
d:Rt/Plan/IsoCenterY                 = -55.00 mm
d:Rt/Plan/IsoCenterZ                 = -0.45 mm
d:Ge/snoutPosition                   = 92.90 mm
d:Ge/gantryAngle                     = 0.00 deg
d:Ge/couchAngle                      = 0.00 deg

# Centre of the CT volume in DICOM coordinates. TsDicomPatient redefines these itself,
# but only while reading the image, which is after it has calculated the initial patient
# placement from Ge/Patient/Trans*. TOPAS recalculates the placement before the first run,
# so these values do not affect the tracking geometry -- but the geometry overlap check
# runs on the initial placement. Left at 0 the patient is checked at -IsoCenter instead of
# CTcentre - IsoCenter, which aborts TOPAS on a spurious overlap for a long CT (issue #61).
dc:Ge/Patient/DicomOriginX           = 0.0000 mm
dc:Ge/Patient/DicomOriginY           = 0.0000 mm
dc:Ge/Patient/DicomOriginZ           = 0.0000 mm

##############################################
###    GEOM.  B E A M   P O S I T I O N    ###
##############################################
s:Ge/BeamPosition/Parent             = "Gantry"
s:Ge/BeamPosition/Type               = "Group"
d:Ge/BeamPosition/TransZ             = -600.0 mm
d:Ge/BeamPosition/TransX             = Tf/spotPositionX/Value mm
d:Ge/BeamPosition/TransY             = -1.0 * Tf/spotPositionY/Value mm
d:Ge/BeamPosition/RotX               = -1.0 * Tf/spotAngleY/Value deg
d:Ge/BeamPosition/RotY               = Tf/BeamPositionRotY/Value deg
d:Ge/BeamPosition/RotZ               = 0.00 deg

##############################################
###        R A N G E   S H I F T E R       ###
##############################################
s:Ge/RangeShifter/Parent             = "Gantry"
s:Ge/RangeShifter/Type               = "TsBox"
s:Ge/RangeShifter/Material           = "Lexan"
b:Ge/RangeShifter/Isparallel         = "True"
sv:Ph/Default/LayeredMassGeometryWorlds = 2 "Patient/RTDoseGrid" "RangeShifter"
d:Ge/RangeShifter/HLX                = 225.00 mm
d:Ge/RangeShifter/HLY                = 225.00 mm
d:Ge/RangeShifter/HLZ                = 15.00 mm
s:Ge/RangeShifter/Color              = "Orange"
d:Ge/RangeShifter/TransZ            = -150.90 mm


##############################################
###               B  E  A  M               ###
##############################################
s:So/Field/Type                      = "Emittance"
s:So/Field/Component                 = "BeamPosition"
s:So/Field/BeamParticle              = "proton"
d:So/Field/BeamEnergy                = Tf/Energy/Value MeV
u:So/Field/BeamEnergySpread          = Tf/EnergySpread/Value
s:So/Field/Distribution              = "BiGaussian"
d:So/Field/SigmaX                    = Tf/SigmaX/Value mm
d:So/Field/SigmaY                    = Tf/SigmaY/Value mm
u:So/Field/SigmaXprime               = Tf/SigmaXprime/Value
u:So/Field/SigmaYprime               = Tf/SigmaYprime/Value
u:So/Field/CorrelationX              = Tf/CorrelationX/Value
u:So/Field/CorrelationY              = Tf/CorrelationY/Value

i:So/Field/NumberOfHistoriesInRun    = Tf/spotWeight/Value

##############################################
###  T  I  M  E    F  E  A  T  U  R  E  S  ###
##############################################

i:Tf/NumberOfSequentialTimes         = 5775
d:Tf/TimelineStart                   = 1 s
d:Tf/TimelineEnd                     = 5776 s

s:Tf/Energy/Function                 = "Step"
dv:Tf/Energy/Times                   = 5775 1 2 3 4 5 6 7 8 9 10 11 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5775 s
dv:Tf/Energy/Values                   = 5775 126.061 126.061 126.061 126.061 126.061 126.061 126.061 126.061 126.061 126.061 126.061 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81.557 MeV


s:Tf/EnergySpread/Function                 = "Step"
dv:Tf/EnergySpread/Times                   = 5775 1 2 3 4 5 6 7 8 9 10 11 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5775 s
uv:Tf/EnergySpread/Values                   = 5775 0.89550 0.89550 0.89550 0.89550 0.89550 0.89550 0.89550 0.89550 0.89550 0.89550 0.89550 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1.07384 


s:Tf/spotPositionX/Function                 = "Step"
dv:Tf/spotPositionX/Times                   = 5775 1 2 3 4 5 6 7 8 9 10 11 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5775 s
dv:Tf/spotPositionX/Values                   = 5775 -39.30 -39.30 -39.30 -39.30 -39.30 -39.30 -39.30 -39.30 -39.30 -39.30 -39.30 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39.63 mm


s:Tf/spotAngleX/Function                 = "Step"
dv:Tf/spotAngleX/Times                   = 5775 1 2 3 4 5 6 7 8 9 10 11 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5775 s
dv:Tf/spotAngleX/Values                   = 5775 -1.608 -1.608 -1.608 -1.608 -1.608 -1.608 -1.608 -1.608 -1.608 -1.608 -1.608 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1.621 deg


s:Tf/BeamPositionRotY/Function                 = "Step"
dv:Tf/BeamPositionRotY/Times                   = 5775 1 2 3 4 5 6 7 8 9 10 11 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5775 s
dv:Tf/BeamPositionRotY/Values                   = 5775 1.608 1.608 1.608 1.608 1.608 1.608 1.608 1.608 1.608 1.608 1.608 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-1.621 deg


s:Tf/spotPositionY/Function                 = "Step"
dv:Tf/spotPositionY/Times                   = 5775 1 2 3 4 5 6 7 8 9 10 11 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5775 s
dv:Tf/spotPositionY/Values                   = 5775 -37.07 -32.50 -27.93 -23.36 -18.79 -14.21 -9.64 -5.07 -0.50 4.07 8.64 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-33.14 mm


s:Tf/spotAngleY/Function                 = "Step"
dv:Tf/spotAngleY/Times                   = 5775 1 2 3 4 5 6 7 8 9 10 11 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5775 s
dv:Tf/spotAngleY/Values                   = 5775 -1.084 -0.950 -0.816 -0.683 -0.549 -0.415 -0.282 -0.148 -0.015 0.119 0.253 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-0.969 deg


s:Tf/SigmaX/Function                 = "Step"
dv:Tf/SigmaX/Times                   = 5775 1 2 3 4 5 6 7 8 9 10 11 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5775 s
dv:Tf/SigmaX/Values                   = 5775 3.69371 3.69371 3.69371 3.69371 3.69371 3.69371 3.69371 3.69371 3.69371 3.69371 3.69371 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4.12885 mm


s:Tf/SigmaY/Function                 = "Step"
dv:Tf/SigmaY/Times                   = 5775 1 2 3 4 5 6 7 8 9 10 11 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5775 s
dv:Tf/SigmaY/Values                   = 5775 3.28065 3.28065 3.28065 3.28065 3.28065 3.28065 3.28065 3.28065 3.28065 3.28065 3.28065 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3.80250 mm


s:Tf/SigmaXprime/Function                 = "Step"
dv:Tf/SigmaXprime/Times                   = 5775 1 2 3 4 5 6 7 8 9 10 11 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5775 s
uv:Tf/SigmaXprime/Values                   = 5775 0.00413 0.00413 0.00413 0.00413 0.00413 0.00413 0.00413 0.00413 0.00413 0.00413 0.00413 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0.00617 


s:Tf/SigmaYprime/Function                 = "Step"
dv:Tf/SigmaYprime/Times                   = 5775 1 2 3 4 5 6 7 8 9 10 11 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5775 s
uv:Tf/SigmaYprime/Values                   = 5775 0.00401 0.00401 0.00401 0.00401 0.00401 0.00401 0.00401 0.00401 0.00401 0.00401 0.00401 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0.00612 


s:Tf/CorrelationX/Function                 = "Step"
dv:Tf/CorrelationX/Times                   = 5775 1 2 3 4 5 6 7 8 9 10 11 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5775 s
uv:Tf/CorrelationX/Values                   = 5775 -0.03520 -0.03520 -0.03520 -0.03520 -0.03520 -0.03520 -0.03520 -0.03520 -0.03520 -0.03520 -0.03520 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-0.02936 


s:Tf/CorrelationY/Function                 = "Step"
dv:Tf/CorrelationY/Times                   = 5775 1 2 3 4 5 6 7 8 9 10 11 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5775 s
uv:Tf/CorrelationY/Values                   = 5775 0.23947 0.23947 0.23947 0.23947 0.23947 0.23947 0.23947 0.23947 0.23947 0.23947 0.23947 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0.12092 


s:Tf/spotWeight/Function                 = "Step"
dv:Tf/spotWeight/Times                   = 5775 1 2 3 4 5 6 7 8 9 10 11 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5775 s
uv:Tf/spotWeight/Values                   = 5775 191 154 229 211 211 215 270 328 149 173 125 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110 


