# Topas input file for field 1
# ----------------------------------------
# SOP_INSTANCE_UID 1.2.752.243.1.1.20260105182345801.4870.23686
# 
# TOTAL_NUMBER_OF_PARTICLES: 174503802987
# TOTAL_MU: 60606.06
# REQUESTED_HISTORIES: 100000000
# PARTICLE_SCALING: 1745.04
#
# Generated by dicomexportplan --test-mode; patched by tools/patch_topas_testmode.py
# using dicomexport 1.4.4
# https://github.com/nbassler/dicomexport
#
##############################################
###           V A R I A B L E S            ###
##############################################

d:Rt/Plan/IsoCenterX                 = 0.00 mm
d:Rt/Plan/IsoCenterY                 = -55.00 mm
d:Rt/Plan/IsoCenterZ                 = -0.45 mm
d:Ge/snoutPosition                   = 92.90 mm
d:Ge/gantryAngle                     = 0.00 deg
d:Ge/couchAngle                      = 0.00 deg

# Centre of the CT volume in DICOM coordinates. TsDicomPatient redefines these itself,
# but only while reading the image, which is after it has calculated the initial patient
# placement from Ge/Patient/Trans*. TOPAS recalculates the placement before the first run,
# so these values do not affect the tracking geometry -- but the geometry overlap check
# runs on the initial placement. Left at 0 the patient is checked at -IsoCenter instead of
# CTcentre - IsoCenter, which aborts TOPAS on a spurious overlap for a long CT (issue #61).
dc:Ge/Patient/DicomOriginX           = 0.0000 mm
dc:Ge/Patient/DicomOriginY           = 0.0000 mm
dc:Ge/Patient/DicomOriginZ           = 0.0000 mm

##############################################
###         W O R L D    S E T U P         ###
##############################################
s:Ge/World/Type            = "TsBox"
s:Ge/World/Material        = "Air"
d:Ge/World/HLX             = 1100.00 mm
d:Ge/World/HLY             = 1100.00 mm
d:Ge/World/HLZ             = 1100.00 mm
b:Ge/World/Invisible       = "True"

##############################################
###     G E O M E T R Y   G A N T R Y      ###
##############################################
s:Ge/Gantry/Parent                   = "DCM_to_IEC"
s:Ge/Gantry/Type                     = "Group"
d:Ge/Gantry/TransX                   = 0.00 mm
d:Ge/Gantry/TransY                   = 0.00 mm
d:Ge/Gantry/TransZ                   = 0.00 mm
d:Ge/Gantry/RotX                     = 0.00 deg
d:Ge/Gantry/RotY                     = Ge/gantryAngle deg
d:Ge/Gantry/RotZ                     = 0.00 deg

##############################################
###      G E O M E T R Y    C O U C H      ###
##############################################
s:Ge/Couch/Parent                  = "World"
s:Ge/Couch/Type                    = "Group"
d:Ge/Couch/RotX                    = 0. deg
d:Ge/Couch/RotY                    = -1.0 * Ge/couchAngle deg
d:Ge/Couch/RotZ                    = 0. deg
d:Ge/Couch/TransX                  = 0.0 mm
d:Ge/Couch/TransY                  = 0.0 mm
d:Ge/Couch/TransZ                  = 0.0 mm

##############################################
###      G E O M E T R Y    DCM_to_IEC     ###
##############################################
s:Ge/DCM_to_IEC/Parent               = "Couch"
s:Ge/DCM_to_IEC/Type                 = "Group"
d:Ge/DCM_to_IEC/TransX               = 0.0 mm
d:Ge/DCM_to_IEC/TransY               = 0.0 mm
d:Ge/DCM_to_IEC/TransZ               = 0.0 mm
d:Ge/DCM_to_IEC/RotX                 = 90.00 deg
d:Ge/DCM_to_IEC/RotY                 = 0.0 deg
d:Ge/DCM_to_IEC/RotZ                 = 0.0 deg

########################################
# Geometry F (docs/geometry.md), isocenter-referenced z -> beam +Z
#   slab1 z=[-4.37,1.80], pmma z=[1.80,2.30], slab3 z=[2.30,16.13]
#   dicomexport emits the range shifter at z=[-15.09,-12.09]
########################################
d:Ge/scoringDepthHLZ = 10.25 cm
d:Ge/scoringDepthTransZ = 5.88 cm
d:Ge/targetDepthZ = 2.05 cm

s:Ge/SolidWater_slab1/Parent      = "Gantry"
s:Ge/SolidWater_slab1/Type        = "TsBox"
s:Ge/SolidWater_slab1/Material    = "Solid_Water"
d:Ge/SolidWater_slab1/HLX         = 15.0 cm
d:Ge/SolidWater_slab1/HLY         = 15.0 cm
d:Ge/SolidWater_slab1/HLZ         = 3.085 cm
d:Ge/SolidWater_slab1/TransZ      = -1.285 cm
d:Ge/SolidWater_slab1/MaxStepSize = 0.5 mm
s:Ge/SolidWater_slab1/Color       = "blue"

s:Ge/pmma_slab/Parent      = "Gantry"
s:Ge/pmma_slab/Type        = "TsBox"
s:Ge/pmma_slab/Material    = "PMMA"
d:Ge/pmma_slab/HLX         = 15.0 cm
d:Ge/pmma_slab/HLY         = 15.0 cm
d:Ge/pmma_slab/HLZ         = 0.25 cm
d:Ge/pmma_slab/TransZ      = 2.05 cm
d:Ge/pmma_slab/MaxStepSize = 0.5 mm
s:Ge/pmma_slab/Color       = "yellow"

s:Ge/SolidWater_slab3/Parent      = "Gantry"
s:Ge/SolidWater_slab3/Type        = "TsBox"
s:Ge/SolidWater_slab3/Material    = "Solid_Water"
d:Ge/SolidWater_slab3/HLX         = 15.0 cm
d:Ge/SolidWater_slab3/HLY         = 15.0 cm
d:Ge/SolidWater_slab3/HLZ         = 6.915 cm
d:Ge/SolidWater_slab3/TransZ      = 9.215 cm
d:Ge/SolidWater_slab3/MaxStepSize = 0.5 mm
s:Ge/SolidWater_slab3/Color       = "red"

s:outdir = "data/topas/results/output/plan06_field01_geoF_SOBP/"

########################################
# Project physics/runtime overrides
########################################
sv:Ph/Default/Modules = 6 "g4em-standard_opt3" "g4h-phy_QGSP_BIC_HP" "g4decay" "g4ion-binarycascade" "g4h-elastic_HP" "g4stopping"
i:Ts/NumberOfThreads = 0
b:Ts/PauseBeforeSequence = "F"
i:Ts/ShowHistoryCountAtInterval = 1000
b:Ts/ShowHistoryCountOnSingleLine = "FALSE"
i:Tf/Verbosity = 0
b:Ts/PauseBeforeQuit = "FALSE"

########################################
# Materials
########################################
sv:Ma/PMMA/Components = 3 "Carbon" "Hydrogen" "Oxygen"
uv:Ma/PMMA/Fractions = 3  0.599848  0.080538  0.319614
d:Ma/PMMA/Density = 1.190 g/cm3

sv:Ma/Solid_Water/Components  = 6 "Hydrogen" "Carbon" "Nitrogen" "Oxygen" "Chlorine" "Calcium"
uv:Ma/Solid_Water/Fractions   = 6 0.081 0.672 0.024 0.199 0.001 0.023
d:Ma/Solid_Water/Density      = 1.039 g/cm3

# Polycarbonate range shifter material used by plans 06/07. The geometry itself
# is emitted by dicomexportplan when the RTPLAN contains a range shifter.
sv:Ma/Lexan/Components = 3 "Carbon" "Hydrogen" "Oxygen"
uv:Ma/Lexan/Fractions = 3 0.755751 0.055491 0.188758
d:Ma/Lexan/Density = 1.200 g/cm3

########################################
# Scoring Geometry (parent "Gantry"; depth = +Z, isocenter Z=0)
########################################
# Depth profile: 2x2 cm2 lateral acceptance, 205 x 1 mm bins along Z. The
# geometry patch-in defines Ge/scoringDepthHLZ and Ge/scoringDepthTransZ so this
# matches the plan's SH12A Z_narrow mesh.
s:Ge/ScoringZBox/Parent     = "Gantry"
s:Ge/ScoringZBox/Type       = "TsBox"
b:Ge/ScoringZBox/IsParallel = "TRUE"
d:Ge/ScoringZBox/HLX        = 1 cm
d:Ge/ScoringZBox/HLY        = 1 cm
d:Ge/ScoringZBox/HLZ        = Ge/scoringDepthHLZ cm
i:Ge/ScoringZBox/XBins      = 1
i:Ge/ScoringZBox/YBins      = 1
i:Ge/ScoringZBox/ZBins      = 205
d:Ge/ScoringZBox/TransZ     = Ge/scoringDepthTransZ cm
s:Ge/ScoringZBox/Color      = "green"

# Longitudinal map (map_XZ): X vs depth Z, 2 cm thick in Y.
s:Ge/ScoringXZBox/Parent     = "Gantry"
s:Ge/ScoringXZBox/Type       = "TsBox"
b:Ge/ScoringXZBox/IsParallel = "TRUE"
d:Ge/ScoringXZBox/HLX        = 15 cm
d:Ge/ScoringXZBox/HLY        = 1 cm
d:Ge/ScoringXZBox/HLZ        = Ge/scoringDepthHLZ cm
i:Ge/ScoringXZBox/XBins      = 300
i:Ge/ScoringXZBox/YBins      = 1
i:Ge/ScoringXZBox/ZBins      = 205
d:Ge/ScoringXZBox/TransZ     = Ge/scoringDepthTransZ cm
s:Ge/ScoringXZBox/Color      = "green"

# Transverse map (map_XY): X vs Y at isocenter, 5 mm thick in Z.
s:Ge/ScoringXYBox/Parent     = "Gantry"
s:Ge/ScoringXYBox/Type       = "TsBox"
b:Ge/ScoringXYBox/IsParallel = "TRUE"
d:Ge/ScoringXYBox/HLX        = 15 cm
d:Ge/ScoringXYBox/HLY        = 15 cm
d:Ge/ScoringXYBox/HLZ        = 0.25 cm
i:Ge/ScoringXYBox/XBins      = 300
i:Ge/ScoringXYBox/YBins      = 300
i:Ge/ScoringXYBox/ZBins      = 1
d:Ge/ScoringXYBox/TransZ     = 0.0 cm
s:Ge/ScoringXYBox/Color      = "green"

# Target detector volume (5 x 5 x 0.2 cm3) at the geometry's detector depth.
s:Ge/TargetBox/Parent     = "Gantry"
s:Ge/TargetBox/Type       = "TsBox"
b:Ge/TargetBox/IsParallel = "TRUE"
d:Ge/TargetBox/HLX        = 2.5 cm
d:Ge/TargetBox/HLY        = 2.5 cm
d:Ge/TargetBox/HLZ        = 0.1 cm
i:Ge/TargetBox/XBins      = 1
i:Ge/TargetBox/YBins      = 1
i:Ge/TargetBox/ZBins      = 1
d:Ge/TargetBox/TransZ     = Ge/targetDepthZ cm
s:Ge/TargetBox/Color      = "magenta"

########################################
# Scoring
########################################
# All scorers below are NATIVE OpenTOPAS (no extension). OutputFile == the
# data/output_catalog.json key, so postprocess_local.py maps each CSV to its
# output_type by filename. Depth scorers bin along beam +Z (ScoringZBox) = the
# derived depth; no readback/flip needed. Particle filters: OnlyIncludeParticlesNamed
# (proton/deuteron/triton/He3/alpha), OnlyIncludeParticlesOfGeneration="Primary".
# heavy_recoils (Z>=3) is deferred (native atomic-number filter is exact-Z only).

# ---------- Depth dose to medium (mat) : DoseToMedium ----------
s:Sc/dD_all_mat/Quantity = "DoseToMedium"
s:Sc/dD_all_mat/Component = "ScoringZBox"
s:Sc/dD_all_mat/OutputType = "csv"
s:Sc/dD_all_mat/IfOutputFileAlreadyExists = "Overwrite"
b:Sc/dD_all_mat/PropagateToChildren = "True"
s:Sc/dD_all_mat/OutputFile = outdir + "depth_Z.DOSE.all.mat"

s:Sc/dD_prim_mat/Quantity = "DoseToMedium"
s:Sc/dD_prim_mat/Component = "ScoringZBox"
s:Sc/dD_prim_mat/OutputType = "csv"
s:Sc/dD_prim_mat/IfOutputFileAlreadyExists = "Overwrite"
b:Sc/dD_prim_mat/PropagateToChildren = "True"
sv:Sc/dD_prim_mat/OnlyIncludeParticlesNamed = 1 "proton"
s:Sc/dD_prim_mat/OnlyIncludeParticlesOfGeneration = "Primary"
s:Sc/dD_prim_mat/OutputFile = outdir + "depth_Z.DOSE.primary.mat"

s:Sc/dD_p_mat/Quantity = "DoseToMedium"
s:Sc/dD_p_mat/Component = "ScoringZBox"
s:Sc/dD_p_mat/OutputType = "csv"
s:Sc/dD_p_mat/IfOutputFileAlreadyExists = "Overwrite"
b:Sc/dD_p_mat/PropagateToChildren = "True"
sv:Sc/dD_p_mat/OnlyIncludeParticlesNamed = 1 "proton"
s:Sc/dD_p_mat/OutputFile = outdir + "depth_Z.DOSE.protons.mat"

s:Sc/dD_d_mat/Quantity = "DoseToMedium"
s:Sc/dD_d_mat/Component = "ScoringZBox"
s:Sc/dD_d_mat/OutputType = "csv"
s:Sc/dD_d_mat/IfOutputFileAlreadyExists = "Overwrite"
b:Sc/dD_d_mat/PropagateToChildren = "True"
sv:Sc/dD_d_mat/OnlyIncludeParticlesNamed = 1 "deuteron"
s:Sc/dD_d_mat/OutputFile = outdir + "depth_Z.DOSE.deuterons.mat"

s:Sc/dD_t_mat/Quantity = "DoseToMedium"
s:Sc/dD_t_mat/Component = "ScoringZBox"
s:Sc/dD_t_mat/OutputType = "csv"
s:Sc/dD_t_mat/IfOutputFileAlreadyExists = "Overwrite"
b:Sc/dD_t_mat/PropagateToChildren = "True"
sv:Sc/dD_t_mat/OnlyIncludeParticlesNamed = 1 "triton"
s:Sc/dD_t_mat/OutputFile = outdir + "depth_Z.DOSE.tritons.mat"

s:Sc/dD_he3_mat/Quantity = "DoseToMedium"
s:Sc/dD_he3_mat/Component = "ScoringZBox"
s:Sc/dD_he3_mat/OutputType = "csv"
s:Sc/dD_he3_mat/IfOutputFileAlreadyExists = "Overwrite"
b:Sc/dD_he3_mat/PropagateToChildren = "True"
sv:Sc/dD_he3_mat/OnlyIncludeParticlesNamed = 1 "He3"
s:Sc/dD_he3_mat/OutputFile = outdir + "depth_Z.DOSE.he3.mat"

s:Sc/dD_a_mat/Quantity = "DoseToMedium"
s:Sc/dD_a_mat/Component = "ScoringZBox"
s:Sc/dD_a_mat/OutputType = "csv"
s:Sc/dD_a_mat/IfOutputFileAlreadyExists = "Overwrite"
b:Sc/dD_a_mat/PropagateToChildren = "True"
sv:Sc/dD_a_mat/OnlyIncludeParticlesNamed = 1 "alpha"
s:Sc/dD_a_mat/OutputFile = outdir + "depth_Z.DOSE.alphas.mat"

# ---------- Depth dose to water (H2O) : DoseToWater ----------
s:Sc/dD_all_H2O/Quantity = "DoseToWater"
s:Sc/dD_all_H2O/Component = "ScoringZBox"
s:Sc/dD_all_H2O/OutputType = "csv"
s:Sc/dD_all_H2O/IfOutputFileAlreadyExists = "Overwrite"
b:Sc/dD_all_H2O/PropagateToChildren = "True"
s:Sc/dD_all_H2O/OutputFile = outdir + "depth_Z.DOSE.all.H2O"

s:Sc/dD_prim_H2O/Quantity = "DoseToWater"
s:Sc/dD_prim_H2O/Component = "ScoringZBox"
s:Sc/dD_prim_H2O/OutputType = "csv"
s:Sc/dD_prim_H2O/IfOutputFileAlreadyExists = "Overwrite"
b:Sc/dD_prim_H2O/PropagateToChildren = "True"
sv:Sc/dD_prim_H2O/OnlyIncludeParticlesNamed = 1 "proton"
s:Sc/dD_prim_H2O/OnlyIncludeParticlesOfGeneration = "Primary"
s:Sc/dD_prim_H2O/OutputFile = outdir + "depth_Z.DOSE.primary.H2O"

s:Sc/dD_p_H2O/Quantity = "DoseToWater"
s:Sc/dD_p_H2O/Component = "ScoringZBox"
s:Sc/dD_p_H2O/OutputType = "csv"
s:Sc/dD_p_H2O/IfOutputFileAlreadyExists = "Overwrite"
b:Sc/dD_p_H2O/PropagateToChildren = "True"
sv:Sc/dD_p_H2O/OnlyIncludeParticlesNamed = 1 "proton"
s:Sc/dD_p_H2O/OutputFile = outdir + "depth_Z.DOSE.protons.H2O"

# ---------- Depth fluence : Fluence (medium-independent) ----------
s:Sc/dF_all_mat/Quantity = "Fluence"
s:Sc/dF_all_mat/Component = "ScoringZBox"
s:Sc/dF_all_mat/OutputType = "csv"
s:Sc/dF_all_mat/IfOutputFileAlreadyExists = "Overwrite"
b:Sc/dF_all_mat/PropagateToChildren = "True"
s:Sc/dF_all_mat/OutputFile = outdir + "depth_Z.FLUENCE.all.mat"

s:Sc/dF_prim_mat/Quantity = "Fluence"
s:Sc/dF_prim_mat/Component = "ScoringZBox"
s:Sc/dF_prim_mat/OutputType = "csv"
s:Sc/dF_prim_mat/IfOutputFileAlreadyExists = "Overwrite"
b:Sc/dF_prim_mat/PropagateToChildren = "True"
sv:Sc/dF_prim_mat/OnlyIncludeParticlesNamed = 1 "proton"
s:Sc/dF_prim_mat/OnlyIncludeParticlesOfGeneration = "Primary"
s:Sc/dF_prim_mat/OutputFile = outdir + "depth_Z.FLUENCE.primary.mat"

s:Sc/dF_p_mat/Quantity = "Fluence"
s:Sc/dF_p_mat/Component = "ScoringZBox"
s:Sc/dF_p_mat/OutputType = "csv"
s:Sc/dF_p_mat/IfOutputFileAlreadyExists = "Overwrite"
b:Sc/dF_p_mat/PropagateToChildren = "True"
sv:Sc/dF_p_mat/OnlyIncludeParticlesNamed = 1 "proton"
s:Sc/dF_p_mat/OutputFile = outdir + "depth_Z.FLUENCE.protons.mat"

s:Sc/dF_d_mat/Quantity = "Fluence"
s:Sc/dF_d_mat/Component = "ScoringZBox"
s:Sc/dF_d_mat/OutputType = "csv"
s:Sc/dF_d_mat/IfOutputFileAlreadyExists = "Overwrite"
b:Sc/dF_d_mat/PropagateToChildren = "True"
sv:Sc/dF_d_mat/OnlyIncludeParticlesNamed = 1 "deuteron"
s:Sc/dF_d_mat/OutputFile = outdir + "depth_Z.FLUENCE.deuterons.mat"

s:Sc/dF_t_mat/Quantity = "Fluence"
s:Sc/dF_t_mat/Component = "ScoringZBox"
s:Sc/dF_t_mat/OutputType = "csv"
s:Sc/dF_t_mat/IfOutputFileAlreadyExists = "Overwrite"
b:Sc/dF_t_mat/PropagateToChildren = "True"
sv:Sc/dF_t_mat/OnlyIncludeParticlesNamed = 1 "triton"
s:Sc/dF_t_mat/OutputFile = outdir + "depth_Z.FLUENCE.tritons.mat"

s:Sc/dF_he3_mat/Quantity = "Fluence"
s:Sc/dF_he3_mat/Component = "ScoringZBox"
s:Sc/dF_he3_mat/OutputType = "csv"
s:Sc/dF_he3_mat/IfOutputFileAlreadyExists = "Overwrite"
b:Sc/dF_he3_mat/PropagateToChildren = "True"
sv:Sc/dF_he3_mat/OnlyIncludeParticlesNamed = 1 "He3"
s:Sc/dF_he3_mat/OutputFile = outdir + "depth_Z.FLUENCE.he3.mat"

s:Sc/dF_a_mat/Quantity = "Fluence"
s:Sc/dF_a_mat/Component = "ScoringZBox"
s:Sc/dF_a_mat/OutputType = "csv"
s:Sc/dF_a_mat/IfOutputFileAlreadyExists = "Overwrite"
b:Sc/dF_a_mat/PropagateToChildren = "True"
sv:Sc/dF_a_mat/OnlyIncludeParticlesNamed = 1 "alpha"
s:Sc/dF_a_mat/OutputFile = outdir + "depth_Z.FLUENCE.alphas.mat"

# ---------- Native ProtonLET (depth): dose- and track-averaged ----------
# TOPAS's native ProtonLET with DEFAULT settings, so we can see how the native
# scorer behaves. WeightBy selects dose- (DLET) vs fluence/track-averaged (TLET).
# CAVEAT: by default it looks up LET at each step's INITIAL energy
# (UsePreStepLookup), so it is biased where dE/dx changes fast (distal edge). The
# corrected/averaged, particle-filtered, LET-to-water version is issue #153.
s:Sc/dDLET_p/Quantity = "ProtonLET"
s:Sc/dDLET_p/Component = "ScoringZBox"
s:Sc/dDLET_p/OutputType = "csv"
s:Sc/dDLET_p/IfOutputFileAlreadyExists = "Overwrite"
b:Sc/dDLET_p/PropagateToChildren = "True"
s:Sc/dDLET_p/WeightBy = "dose"
s:Sc/dDLET_p/OutputFile = outdir + "depth_Z.DLET.protons.mat"

s:Sc/dTLET_p/Quantity = "ProtonLET"
s:Sc/dTLET_p/Component = "ScoringZBox"
s:Sc/dTLET_p/OutputType = "csv"
s:Sc/dTLET_p/IfOutputFileAlreadyExists = "Overwrite"
b:Sc/dTLET_p/PropagateToChildren = "True"
s:Sc/dTLET_p/WeightBy = "fluence"
s:Sc/dTLET_p/OutputFile = outdir + "depth_Z.TLET.protons.mat"

# Primary protons only (Generation filter). ProtonLET is proton-only, so there is
# no native all-charged LET (depth_Z.*LET.all.* stays with the #153 custom scorer).
s:Sc/dDLET_prim/Quantity = "ProtonLET"
s:Sc/dDLET_prim/Component = "ScoringZBox"
s:Sc/dDLET_prim/OutputType = "csv"
s:Sc/dDLET_prim/IfOutputFileAlreadyExists = "Overwrite"
b:Sc/dDLET_prim/PropagateToChildren = "True"
s:Sc/dDLET_prim/WeightBy = "dose"
s:Sc/dDLET_prim/OnlyIncludeParticlesOfGeneration = "Primary"
s:Sc/dDLET_prim/OutputFile = outdir + "depth_Z.DLET.primary.mat"

s:Sc/dTLET_prim/Quantity = "ProtonLET"
s:Sc/dTLET_prim/Component = "ScoringZBox"
s:Sc/dTLET_prim/OutputType = "csv"
s:Sc/dTLET_prim/IfOutputFileAlreadyExists = "Overwrite"
b:Sc/dTLET_prim/PropagateToChildren = "True"
s:Sc/dTLET_prim/WeightBy = "fluence"
s:Sc/dTLET_prim/OnlyIncludeParticlesOfGeneration = "Primary"
s:Sc/dTLET_prim/OutputFile = outdir + "depth_Z.TLET.primary.mat"

# ---------- 2D dose maps (beam frame) ----------
# Transverse (X-Y at isocenter) and longitudinal (X-Z) dose maps.
s:Sc/mapXY_D/Quantity = "DoseToMedium"
s:Sc/mapXY_D/Component = "ScoringXYBox"
s:Sc/mapXY_D/OutputType = "csv"
s:Sc/mapXY_D/IfOutputFileAlreadyExists = "Overwrite"
b:Sc/mapXY_D/PropagateToChildren = "True"
s:Sc/mapXY_D/OutputFile = outdir + "map_XY.DOSE.all.mat"

s:Sc/mapXZ_D/Quantity = "DoseToMedium"
s:Sc/mapXZ_D/Component = "ScoringXZBox"
s:Sc/mapXZ_D/OutputType = "csv"
s:Sc/mapXZ_D/IfOutputFileAlreadyExists = "Overwrite"
b:Sc/mapXZ_D/PropagateToChildren = "True"
s:Sc/mapXZ_D/OutputFile = outdir + "map_XZ.DOSE.all.mat"

# ---------- Target scalar scorers ----------
# Match detector_reference.md target scalar pages where native TOPAS scorers exist.
# Dose is converted from TOPAS Gy sums to MeV/g/primary by postprocess_local.py.
s:Sc/tD_all_mat/Quantity = "DoseToMedium"
s:Sc/tD_all_mat/Component = "TargetBox"
s:Sc/tD_all_mat/OutputType = "csv"
s:Sc/tD_all_mat/IfOutputFileAlreadyExists = "Overwrite"
s:Sc/tD_all_mat/OutputFile = outdir + "target.DOSE.all.mat"

s:Sc/tD_all_H2O/Quantity = "DoseToWater"
s:Sc/tD_all_H2O/Component = "TargetBox"
s:Sc/tD_all_H2O/OutputType = "csv"
s:Sc/tD_all_H2O/IfOutputFileAlreadyExists = "Overwrite"
s:Sc/tD_all_H2O/OutputFile = outdir + "target.DOSE.all.H2O"

s:Sc/tDLET_p/Quantity = "ProtonLET"
s:Sc/tDLET_p/Component = "TargetBox"
s:Sc/tDLET_p/OutputType = "csv"
s:Sc/tDLET_p/IfOutputFileAlreadyExists = "Overwrite"
s:Sc/tDLET_p/WeightBy = "dose"
s:Sc/tDLET_p/OutputFile = outdir + "target.DLET.protons.mat"

s:Sc/tDLET_prim/Quantity = "ProtonLET"
s:Sc/tDLET_prim/Component = "TargetBox"
s:Sc/tDLET_prim/OutputType = "csv"
s:Sc/tDLET_prim/IfOutputFileAlreadyExists = "Overwrite"
s:Sc/tDLET_prim/WeightBy = "dose"
s:Sc/tDLET_prim/OnlyIncludeParticlesOfGeneration = "Primary"
s:Sc/tDLET_prim/OutputFile = outdir + "target.DLET.primary.mat"

s:Sc/tTLET_p/Quantity = "ProtonLET"
s:Sc/tTLET_p/Component = "TargetBox"
s:Sc/tTLET_p/OutputType = "csv"
s:Sc/tTLET_p/IfOutputFileAlreadyExists = "Overwrite"
s:Sc/tTLET_p/WeightBy = "fluence"
s:Sc/tTLET_p/OutputFile = outdir + "target.TLET.protons.mat"

s:Sc/tTLET_prim/Quantity = "ProtonLET"
s:Sc/tTLET_prim/Component = "TargetBox"
s:Sc/tTLET_prim/OutputType = "csv"
s:Sc/tTLET_prim/IfOutputFileAlreadyExists = "Overwrite"
s:Sc/tTLET_prim/WeightBy = "fluence"
s:Sc/tTLET_prim/OnlyIncludeParticlesOfGeneration = "Primary"
s:Sc/tTLET_prim/OutputFile = outdir + "target.TLET.primary.mat"

# ---------- Target differential fluence spectra vs ENUC ----------
# TOPAS bins PreStep total kinetic energy. For species with mass number A,
# postprocess maps E_total/A onto the shared SH12A ENUC grid (0.1..300 MeV/u)
# and sums the species spectra to produce the all-particles page.
s:Sc/sp_p/Quantity = "Fluence"
s:Sc/sp_p/Component = "TargetBox"
s:Sc/sp_p/OutputType = "csv"
s:Sc/sp_p/IfOutputFileAlreadyExists = "Overwrite"
i:Sc/sp_p/EBins = 150
d:Sc/sp_p/EBinMin = 0.1 MeV
d:Sc/sp_p/EBinMax = 300. MeV
b:Sc/sp_p/EBinLog = "True"
sc:Sc/sp_p/EBinEnergy = "PreStep"
sv:Sc/sp_p/OnlyIncludeParticlesNamed = 1 "proton"
s:Sc/sp_p/OutputFile = outdir + "spectrum_target.FLUENCE.protons.mat.vs_ENUC"

s:Sc/sp_d/Quantity = "Fluence"
s:Sc/sp_d/Component = "TargetBox"
s:Sc/sp_d/OutputType = "csv"
s:Sc/sp_d/IfOutputFileAlreadyExists = "Overwrite"
i:Sc/sp_d/EBins = 150
d:Sc/sp_d/EBinMin = 0.2 MeV
d:Sc/sp_d/EBinMax = 600. MeV
b:Sc/sp_d/EBinLog = "True"
sc:Sc/sp_d/EBinEnergy = "PreStep"
sv:Sc/sp_d/OnlyIncludeParticlesNamed = 1 "deuteron"
s:Sc/sp_d/OutputFile = outdir + "spectrum_target.FLUENCE.deuterons.mat.vs_ENUC"

s:Sc/sp_t/Quantity = "Fluence"
s:Sc/sp_t/Component = "TargetBox"
s:Sc/sp_t/OutputType = "csv"
s:Sc/sp_t/IfOutputFileAlreadyExists = "Overwrite"
i:Sc/sp_t/EBins = 150
d:Sc/sp_t/EBinMin = 0.3 MeV
d:Sc/sp_t/EBinMax = 900. MeV
b:Sc/sp_t/EBinLog = "True"
sc:Sc/sp_t/EBinEnergy = "PreStep"
sv:Sc/sp_t/OnlyIncludeParticlesNamed = 1 "triton"
s:Sc/sp_t/OutputFile = outdir + "spectrum_target.FLUENCE.tritons.mat.vs_ENUC"

s:Sc/sp_he3/Quantity = "Fluence"
s:Sc/sp_he3/Component = "TargetBox"
s:Sc/sp_he3/OutputType = "csv"
s:Sc/sp_he3/IfOutputFileAlreadyExists = "Overwrite"
i:Sc/sp_he3/EBins = 150
d:Sc/sp_he3/EBinMin = 0.3 MeV
d:Sc/sp_he3/EBinMax = 900. MeV
b:Sc/sp_he3/EBinLog = "True"
sc:Sc/sp_he3/EBinEnergy = "PreStep"
sv:Sc/sp_he3/OnlyIncludeParticlesNamed = 1 "He3"
s:Sc/sp_he3/OutputFile = outdir + "spectrum_target.FLUENCE.he3.mat.vs_ENUC"

s:Sc/sp_a/Quantity = "Fluence"
s:Sc/sp_a/Component = "TargetBox"
s:Sc/sp_a/OutputType = "csv"
s:Sc/sp_a/IfOutputFileAlreadyExists = "Overwrite"
i:Sc/sp_a/EBins = 150
d:Sc/sp_a/EBinMin = 0.4 MeV
d:Sc/sp_a/EBinMax = 1200. MeV
b:Sc/sp_a/EBinLog = "True"
sc:Sc/sp_a/EBinEnergy = "PreStep"
sv:Sc/sp_a/OnlyIncludeParticlesNamed = 1 "alpha"
s:Sc/sp_a/OutputFile = outdir + "spectrum_target.FLUENCE.alphas.mat.vs_ENUC"

# ---------- Qeff (needs the extension, issue #153) ----------
# Uncomment once your TOPAS is compiled with the Qeff scorer extension. Left
# disabled so the no-extension smoke test does not abort on an unknown Quantity.
# s:Sc/Qeff/Quantity = "Qeff"
# s:Sc/Qeff/Component = "ScoringZBox"
# s:Sc/Qeff/OutputType = "csv"
# s:Sc/Qeff/IfOutputFileAlreadyExists = "Overwrite"
# sv:Sc/Qeff/includeparticles = 1 "protons"
# b:Sc/Qeff/PropagateToChildren = "True"
# s:Sc/Qeff/OutputFile = outdir + "depth_Z.DQEFF.protons.mat"

##############################################
###    GEOM.  B E A M   P O S I T I O N    ###
##############################################
s:Ge/BeamPosition/Parent             = "Gantry"
s:Ge/BeamPosition/Type               = "Group"
d:Ge/BeamPosition/TransZ             = -600.0 mm
d:Ge/BeamPosition/TransX             = Tf/spotPositionX/Value mm
d:Ge/BeamPosition/TransY             = -1.0 * Tf/spotPositionY/Value mm
d:Ge/BeamPosition/RotX               = -1.0 * Tf/spotAngleY/Value deg
d:Ge/BeamPosition/RotY               = Tf/BeamPositionRotY/Value deg
d:Ge/BeamPosition/RotZ               = 0.00 deg

##############################################
###        R A N G E   S H I F T E R       ###
##############################################
s:Ge/RangeShifter/Parent             = "Gantry"
s:Ge/RangeShifter/Type               = "TsBox"
s:Ge/RangeShifter/Material           = "Lexan"
b:Ge/RangeShifter/Isparallel         = "True"
sv:Ph/Default/LayeredMassGeometryWorlds = 1 "RangeShifter"
d:Ge/RangeShifter/HLX                = 225.00 mm
d:Ge/RangeShifter/HLY                = 225.00 mm
d:Ge/RangeShifter/HLZ                = 15.00 mm
s:Ge/RangeShifter/Color              = "Orange"
d:Ge/RangeShifter/TransZ            = -150.90 mm


##############################################
###               B  E  A  M               ###
##############################################
s:So/Field/Type                      = "Emittance"
s:So/Field/Component                 = "BeamPosition"
s:So/Field/BeamParticle              = "proton"
d:So/Field/BeamEnergy                = Tf/Energy/Value MeV
u:So/Field/BeamEnergySpread          = Tf/EnergySpread/Value
s:So/Field/Distribution              = "BiGaussian"
d:So/Field/SigmaX                    = Tf/SigmaX/Value mm
d:So/Field/SigmaY                    = Tf/SigmaY/Value mm
u:So/Field/SigmaXprime               = Tf/SigmaXprime/Value
u:So/Field/SigmaYprime               = Tf/SigmaYprime/Value
u:So/Field/CorrelationX              = Tf/CorrelationX/Value
u:So/Field/CorrelationY              = Tf/CorrelationY/Value

i:So/Field/NumberOfHistoriesInRun    = Tf/spotWeight/Value

##############################################
###  T  I  M  E    F  E  A  T  U  R  E  S  ###
##############################################

i:Tf/NumberOfSequentialTimes         = 5775
d:Tf/TimelineStart                   = 1 s
d:Tf/TimelineEnd                     = 5776 s

s:Tf/Energy/Function                 = "Step"
dv:Tf/Energy/Times                   = 5775 1 2 3 4 5 6 7 8 9 10 11 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5775 s
dv:Tf/Energy/Values                   = 5775 126.061 126.061 126.061 126.061 126.061 126.061 126.061 126.061 126.061 126.061 126.061 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81.557 MeV


s:Tf/EnergySpread/Function                 = "Step"
dv:Tf/EnergySpread/Times                   = 5775 1 2 3 4 5 6 7 8 9 10 11 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5775 s
uv:Tf/EnergySpread/Values                   = 5775 0.89550 0.89550 0.89550 0.89550 0.89550 0.89550 0.89550 0.89550 0.89550 0.89550 0.89550 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1.07384 


s:Tf/spotPositionX/Function                 = "Step"
dv:Tf/spotPositionX/Times                   = 5775 1 2 3 4 5 6 7 8 9 10 11 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5775 s
dv:Tf/spotPositionX/Values                   = 5775 -39.30 -39.30 -39.30 -39.30 -39.30 -39.30 -39.30 -39.30 -39.30 -39.30 -39.30 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39.63 mm


s:Tf/spotAngleX/Function                 = "Step"
dv:Tf/spotAngleX/Times                   = 5775 1 2 3 4 5 6 7 8 9 10 11 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5775 s
dv:Tf/spotAngleX/Values                   = 5775 -1.608 -1.608 -1.608 -1.608 -1.608 -1.608 -1.608 -1.608 -1.608 -1.608 -1.608 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1.621 deg


s:Tf/BeamPositionRotY/Function                 = "Step"
dv:Tf/BeamPositionRotY/Times                   = 5775 1 2 3 4 5 6 7 8 9 10 11 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5775 s
dv:Tf/BeamPositionRotY/Values                   = 5775 1.608 1.608 1.608 1.608 1.608 1.608 1.608 1.608 1.608 1.608 1.608 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-1.621 deg


s:Tf/spotPositionY/Function                 = "Step"
dv:Tf/spotPositionY/Times                   = 5775 1 2 3 4 5 6 7 8 9 10 11 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5775 s
dv:Tf/spotPositionY/Values                   = 5775 -37.07 -32.50 -27.93 -23.36 -18.79 -14.21 -9.64 -5.07 -0.50 4.07 8.64 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-33.14 mm


s:Tf/spotAngleY/Function                 = "Step"
dv:Tf/spotAngleY/Times                   = 5775 1 2 3 4 5 6 7 8 9 10 11 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5775 s
dv:Tf/spotAngleY/Values                   = 5775 -1.084 -0.950 -0.816 -0.683 -0.549 -0.415 -0.282 -0.148 -0.015 0.119 0.253 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-0.969 deg


s:Tf/SigmaX/Function                 = "Step"
dv:Tf/SigmaX/Times                   = 5775 1 2 3 4 5 6 7 8 9 10 11 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5775 s
dv:Tf/SigmaX/Values                   = 5775 3.69371 3.69371 3.69371 3.69371 3.69371 3.69371 3.69371 3.69371 3.69371 3.69371 3.69371 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4.12885 mm


s:Tf/SigmaY/Function                 = "Step"
dv:Tf/SigmaY/Times                   = 5775 1 2 3 4 5 6 7 8 9 10 11 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5775 s
dv:Tf/SigmaY/Values                   = 5775 3.28065 3.28065 3.28065 3.28065 3.28065 3.28065 3.28065 3.28065 3.28065 3.28065 3.28065 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3.80250 mm


s:Tf/SigmaXprime/Function                 = "Step"
dv:Tf/SigmaXprime/Times                   = 5775 1 2 3 4 5 6 7 8 9 10 11 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5775 s
uv:Tf/SigmaXprime/Values                   = 5775 0.00413 0.00413 0.00413 0.00413 0.00413 0.00413 0.00413 0.00413 0.00413 0.00413 0.00413 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0.00617 


s:Tf/SigmaYprime/Function                 = "Step"
dv:Tf/SigmaYprime/Times                   = 5775 1 2 3 4 5 6 7 8 9 10 11 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5775 s
uv:Tf/SigmaYprime/Values                   = 5775 0.00401 0.00401 0.00401 0.00401 0.00401 0.00401 0.00401 0.00401 0.00401 0.00401 0.00401 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0.00612 


s:Tf/CorrelationX/Function                 = "Step"
dv:Tf/CorrelationX/Times                   = 5775 1 2 3 4 5 6 7 8 9 10 11 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5775 s
uv:Tf/CorrelationX/Values                   = 5775 -0.03520 -0.03520 -0.03520 -0.03520 -0.03520 -0.03520 -0.03520 -0.03520 -0.03520 -0.03520 -0.03520 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-0.02936 


s:Tf/CorrelationY/Function                 = "Step"
dv:Tf/CorrelationY/Times                   = 5775 1 2 3 4 5 6 7 8 9 10 11 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5775 s
uv:Tf/CorrelationY/Values                   = 5775 0.23947 0.23947 0.23947 0.23947 0.23947 0.23947 0.23947 0.23947 0.23947 0.23947 0.23947 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0.12092 


s:Tf/spotWeight/Function                 = "Step"
dv:Tf/spotWeight/Times                   = 5775 1 2 3 4 5 6 7 8 9 10 11 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5775 s
uv:Tf/spotWeight/Values                   = 5775 19054 15435 22903 21075 21061 21473 27006 32809 14904 17267 12509 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10953 

